PsychoPy2experiment version="2020.2.8"
Settings
  Completed URL = $expInfo['survey-url']+"?id="+expInfo['participant']+"&group="+expInfo['group']
  Experiment info = {'participant': '', 'group': '', 'survey-id': ''}
  Full-screen window = True
  Incomplete URL = $expInfo['survey-url']+"?id="+expInfo['participant']+"&group="+expInfo['group']
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.1.3
  Window size (pixels) = [1920, 1080]
  expName = gonogo
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Routines
  Routine trial
    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        if colorChoice[trials.thisN] == 1:
            colorPick = [1.000,0.004,-1.000]
            colorName = "orange"
            trialText.text = "NO GO"
        else:
            colorPick = [-1.000,-1.000,1.000]
            colorName = "blue"
            trialText.text = "GO"

        if colorName == "blue":
            corrAns = "space"
        else:
            corrAns = "None"

        trialCount.text = str(trials.thisN+1)+" / 100"
      End Routine:
        thisExp.addData('corrAns', corrAns)
        thisExp.addData('colorName', colorName)
        thisExp.addData('cumulativetime', globalClock.getTime())
    PolygonComponent trialCircle
      fillColor [set every repeat] = $colorPick
      lineColor [set every repeat] = $colorPick
      nVertices = 180
      shape = regular polygon...
      size = (0.5, 0.5)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.75
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    KeyboardComponent trialResp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.75
      storeCorrect = True
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    TextComponent trialText
      letterHeight = 0.1
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.75
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    TextComponent trialCount
      letterHeight = 0.05
      pos = (-0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine setup
    CodeComponent JSCode
      Code Type = Auto->JS
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    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        counterTask = 1
  Routine instr
    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if counterTask == 1:
            instrText.text = "For this task, please press 'space' when you see the blue circle, and press nothing for orange. There are 300 total trials split into 3 trial blocks with 100 trials each. Press 's' to start."
        else:
            instrText.text = "Time for a break if you need it. Again, please press 'space' when you see the blue circle, and press nothing for orange. There are 300 total trials split into 3 trial blocks with 100 trials each. Press 's' to start."

        colorChoice = [0,0,0,0,1]
        colorBlock = [1,0,0,0,0]

        for i in range(19):
            shuffle(colorBlock)
            for j in range(5):
                colorChoice.append(colorBlock[j]);

        counterTask = counterTask + 1
    TextComponent instrText
      letterHeight = 0.05
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
      text = Space
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    KeyboardComponent instrResp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent instrImg
      image = gonogo.png
      pos = (0.5, 0.0)
      size = (0.6, 1)
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to finish experiment.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator tasks loopType="TrialHandler"
    loopType = sequential
    nReps = 3
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    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = 100
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      Routine trial
    LoopTerminator trials
  LoopTerminator tasks
  Routine end
